PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = new_grating_pattern_glare
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Routines
  Routine trial
    GratingComponent pattern1_grating
      color = $[-1,-1,-1]
      mask = circle
      ori = 90
      phase = 0
      pos = (0, 1.75)
      sf = 0.3
      size = (13.77, 13.77)
      startVal [time (s)] = 0.0
      tex = sqr
      texture resolution = 512
      units = deg
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    CodeComponent pattern1_code
      Code Type = Py
      Begin Experiment:
        # changing the pattern texture resolution 'manually' because
        # the highest resolution by default in the PsychoPy Builder View
        # is 512
        pattern1_grating.texRes = 2048
    PolygonComponent pattern1_line
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 5
      ori = 90
      pos = (0, 1.75)
      shape = line
      size = (13.77, 2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent pattern1_mid_circle
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 120
      pos = (0, 1.75)
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    RatingScaleComponent pattern1_rating
      forceEndRoutine = True
      high = 5
      labels = Extremt obehagligt, Extremt behagligt
      low = -5
      marker = circle
      markerStart = 0
      pos = 0, -0.4
      saveStartStop = False
      scaleDescription = Hur upplever du mönstret?
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        win=win,
        marker='circle',
        size=1.0,
        pos=[0.0, -0.4],
        low=-5,
        high=5,
        labels=['Extremt obehagligt', ' Extremt behagligt'],
        scale="Vänligen skatta hur du upplever mönstret",
        markerStart='0'
Flow
  Routine trial
